# Generated by Configurator on Mon Sep 27 14:00:12 EDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,NikonKsCam,NikonKsAdapter,NikonKsCam
Device,DHub,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective

# Pre-init settings for devices
Property,NikonKsCam,Camera,DS-Ri2(Sim)

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DObjective,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,NikonKsCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,Empty
Label,DObjective,4,100x
Label,DObjective,3,50x
Label,DObjective,2,20x
Label,DObjective,1,10x
Label,DObjective,0,5x

# Configuration presets
# Group: AutoExposure
# Preset: ContinuousAE
ConfigGroup,AutoExposure,ContinuousAE,NikonKsCam,ExposureMode,ContinuousAE

# Preset: MultiExposureTime
ConfigGroup,AutoExposure,MultiExposureTime,NikonKsCam,ExposureMode,MultiExposureTime

# Preset: Manual
ConfigGroup,AutoExposure,Manual,NikonKsCam,ExposureMode,Manual


# Group: Objective
# Preset: Empty
ConfigGroup,Objective,Empty,DObjective,Label,Empty

# Preset: 50x
ConfigGroup,Objective,50x,DObjective,Label,50x

# Preset: 20x
ConfigGroup,Objective,20x,DObjective,Label,20x

# Preset: 5x
ConfigGroup,Objective,5x,DObjective,Label,5x

# Preset: 10x
ConfigGroup,Objective,10x,DObjective,Label,10x

# Preset: 100x
ConfigGroup,Objective,100x,DObjective,Label,100x


# Group: Gain
# Preset: NewPreset
ConfigGroup,Gain,NewPreset,NikonKsCam,Gain,100


# Group: Binning
# Preset: False
ConfigGroup,Binning,False,NikonKsCam,Binning,1
ConfigGroup,Binning,False,NikonKsCam,Format,4908x3264 RGB 24

# Preset: True
ConfigGroup,Binning,True,NikonKsCam,Binning,3
ConfigGroup,Binning,True,NikonKsCam,Format,1636x1088 RGB 24



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,NikonKsCam,Format,4908x3264 RGB 24
PixelSize_um,Res0,0.3
PixelSizeAffine,Res0,0.3,0.0,0.0,0.0,0.3,0.0

